#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    motor_dummy:
        module.Class: 'motor.motor_dummy.MotorDummy'
        
    pump_dummy:
        module.Class: 'microfluidics.pump_dummy.PumpDummy'

    fluigent_microfluidics:
        module.Class: 'microfluidics.fluigent.fluigent_pump.FluigentController'


        
    valve_dummy:
        module.Class: 'valve.valve_dummy.ValveDummy'
      

        
        

logic:       
    valve_logic:
        module.Class: 'valve_logic.ValveLogic'
        connect:
            valves: 'valve_dummy'
        
    flowcontrol_logic:
        module.Class: 'flowcontrol_logic.FlowcontrolLogic'
        connect:
            pump: 'fluigent_microfluidics'
        
    positioning_logic:
        module.Class: 'positioning_logic.PositioningLogic'
        connect:
            stage: 'motor_dummy'
               
gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'
        
    fluidics_gui:
        module.Class: 'fluidics.fluidics_gui.FluidicsGUI'
        connect:
            valve_logic: 'valve_logic'
            flowcontrol_logic: 'flowcontrol_logic'
            positioning_logic: 'positioning_logic'



